PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Setting Targets
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent targ_top_right
      fillColor = blue
      lineColor = black
      pos = (0.3, 0.3)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 5.0
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    PolygonComponent targ_mid_right
      fillColor = blue
      lineColor = black
      pos = (0.3, 0)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5.0
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    PolygonComponent targ_bot_center
      fillColor = blue
      lineColor = black
      pos = (0, -0.3)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 5.0
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    PolygonComponent targ_top_center
      fillColor = blue
      lineColor = black
      pos = (0, 0.3)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 5.0
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    PolygonComponent targ_top_left
      fillColor = blue
      lineColor = black
      pos = (-0.3, 0.3)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5.0
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    PolygonComponent targ_mid_left
      fillColor = blue
      lineColor = black
      pos = (-0.3, 0)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5.0
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    PolygonComponent targ_bot_left
      fillColor = blue
      lineColor = black
      pos = (-0.3, -0.3)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 5.0
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    PolygonComponent targ_bot_right
      fillColor = blue
      lineColor = black
      pos = (0.3, -0.3)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 5.0
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Flow
  Routine trial
